CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".tif")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Plate>[0-9]{5})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.']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
    Assign a name to:Images matching rules
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    Match metadata:[{'illumPh_golgi': u'Plate', 'illumMito': u'Plate', u'OrigPh_golgi': u'Plate', 'illumER': u'Plate', u'OrigHoechst': u'Plate', u'OrigER': u'Plate', 'illumSyto': u'Plate', u'OrigSyto': u'Plate', u'OrigMito': u'Plate', 'illumHoechst': u'Plate'}, {'illumPh_golgi': None, 'illumMito': None, u'OrigPh_golgi': u'Well', 'illumER': None, u'OrigHoechst': u'Well', u'OrigER': u'Well', 'illumSyto': None, u'OrigSyto': u'Well', u'OrigMito': u'Well', 'illumHoechst': None}, {'illumPh_golgi': None, 'illumMito': None, u'OrigPh_golgi': u'Site', 'illumER': None, u'OrigHoechst': u'Site', u'OrigER': u'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Select the rule criteria:and (file does eq "illumHoechst.mat")
    Name to assign these images:illumHoechst
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does eq "illumER.mat")
    Name to assign these images:illumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does eq "illumSyto.mat")
    Name to assign these images:illumSyto
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does eq "illumPh_golgi.mat")
    Name to assign these images:illumPh_golgi
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does eq "illumMito.mat")
    Name to assign these images:illumMito
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    Select the image type:Illumination function
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigPh_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigHoechst
    Name the output image:Hoechst
    Select the illumination function:illumHoechst
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:6|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
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:illumER
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:7|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
    Select the input image:OrigSyto
    Name the output image:Syto
    Select the illumination function:illumSyto
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:illumMito
    Select how the illumination function is applied:Divide

CorrectIlluminationApply:[module_num:9|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
    Select the input image:OrigPh_golgi
    Name the output image:Ph_golgi
    Select the illumination function:illumPh_golgi
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:700
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Ph_golgi
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    Regularization factor:0.05
    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:13|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
    Hidden:5
    Select an image to measure:Hoechst
    Select an image to measure:ER
    Select an image to measure:Syto
    Select an image to measure:Ph_golgi
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:16|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
    Hidden:4
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:ER
    Select an image to measure:Ph_golgi
    Select an image to measure:Mito
    Select an image to measure:Syto
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:18|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
    Hidden:5
    Hidden:3
    Hidden:2
    Select an image to measure:Hoechst
    Select an image to measure:ER
    Select an image to measure:Syto
    Select an image to measure:Ph_golgi
    Select an image to measure:Mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Texture scale to measure:5
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

ExportToDatabase:[module_num:19|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Pilot_Rerun_illumcorr
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    Output file location:Default Output Folder|/imaging/analysis/2008_12_04_Imaging_CDRP_for_MLPCN/PILOT_RERUN_GOODZERNICKES
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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